/*
* Macro to measure egg size in multiple images in a folder/subfolders.
*/

#@File(label = "Input directory", style = "directory") input
#@File(label = "Output directory", style = "directory") output
#@String(label = "Results Name") nameResults
#@String(label = "File suffix", value = ".tif") suffix
// minSize should be 0.05
#@float(label = "Minimum size") minSize
// maxSize should be 0.1
#@float(label = "Maximum size") maxSize
#@float(label = "Known Distance") knownDist
#@String(label = "Unit of Known Distance") unit

processFolder(input);
	
// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input) {
	list = getFileList(input);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder("" + input + File.separator + list[i]);
		if(endsWith(list[i], suffix))
			processFile(input, output, list[i]);
	}
	//saves results for all images in a single file
	saveAs("Results", output + "/" + nameResults + ".csv"); 
}

function processFile(input, output, file) {
	//setBatchMode(true); // prevents image windows from opening while the script is running
	//open image using Bio-Formats; //Don't do this -Dariel
	//run("Bio-Formats", "open=[" + input + "/" + file +"] autoscale color_mode=Default rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");
    	y = Table.size;
	open(file);
    	file = File.nameWithoutExtension;
    	run("8-bit");
    	id = getImageID(); // get original image id
	run("Duplicate...", " "); // duplicate original image and work on the copy
	
	//Measure scale bar and Duplicate picture with just eggs
	waitForUser("Measure 10 squares of mm Paper from line outside of border to the line inside.");
	getLine(x1, y1, x2, y2, lineWidth);
	lineLength = sqrt(pow(x1-x2, 2) + pow(y1-y2, 2));
	run("Set Scale...", "distance=" + lineLength + " known=knownDist pixel=1 unit=unit");
	waitForUser("Draw Rectangle With Eggs");
	run("Duplicate...", " ");
	rename(file);
	setAutoThreshold("Default");
	//run("Threshold...");
	//run("Create Mask");
	//run("Watershed");
	//save current binary image
	//save(output + "/Binary_OUTPUT_" + file);

	x = nResults;
	//print(x);
	//Before running Analyze Particles make sure Set Measurements has "Area" and "Display label" on
	run("Analyze Particles...", "size=" + minSize + "-" + maxSize + " show=Outlines display exclude add");

	//Stop code if no values were retreived
	if (x == nResults) {
		close();
		close();
		/* 
		 *  Run inverse if image makes background be thresholded instead of eggs
		 *  Do it manually order:
		 *  1) Draw line and set scale manually if image is too zoomed in
		 *  2) Create rectangle with eggs and duplicate image; TAKE OFF "-2.jpg" IN DUPLICATE NAME
		 *  3) Run Threshold image manually
		 *  	3.5) Make sure the Thresholded image has the eggs as a different
		 *  	color than the background
		 *  4) Run Analyze Particles manually
		 *  	4.5) Check to see if the outlined image saved and looks good
		 *  5) Click OK
		 *  
		 *  If the outlined image doesn't look good, you shold delete the outline image and threshold
		 *  again, this time making the eggs be the opposite color they were initially
		 *  (if first appearing as white, now they should look black). Analyze particles
		 *  again and make sure the outlined image looks okay. Click OK once checked.
		 *  
		 *  In some cases some values from the first manual Analyze Particle might be 
		 *  saved onto the Results speadsheet, make a note of pictures you did manually and check both
		 *  the pictures and the values in the spreadsheet at the end.
		 */
		waitForUser("Do it manually");
		save(output + "/" + file  + "_Outline");
	} else {
		save(output + "/" + file  + "_Outline");
		}

	// save current outline image
	//save(output + "/" + file  + "_Outline");
	// add column
	//setResult("file_name", row, file);
    	//selectImage(id); // activate original image
    	//roiManager("Show All with labels"); // overlay ROIs
	//roiManager("Deselect");
	//roiManager("Measure"); // measure on original image
	
	// save ROIs for current image
	//roiManager("Deselect");
	//roiManager("Save", output+ "/" + file + "_ROI.zip"); // saves Rois zip file
	//roiManager("Deselect");
	//roiManager("Delete"); // clear ROI Manager for next image
	close("*");
	print("Line name is " + file);
	print("Length in mm of millimeter paper is: " + lineLength);
	print("Number of eggs in picture is " + nResults - y);
	print("Total number of eggs in sheet is now " + nResults);
}
